i:Ts/NumberOfThreads = 64
#Seed
#i:Ts/Seed = 1
i:Ts/Seed = ${SEED} 

b:Ge/QuitIfOverlapDetected = "False"

Ge/CheckForOverlaps = "False"

##############################
d:Ph/Default/CutForAllParticles= 1.0 mm
##############################

#WORLD
s:Ge/World/Material = "vacuum"
d:Ge/World/HLX =  3. m
d:Ge/World/HLY =  3. m
d:Ge/World/HLZ =  3. m
b:Ge/World/Invisible = "TRUE"


s:Ge/BeamLine/Type="Group"
s:Ge/BeamLine/Parent = "World"
d:Ge/BeamLine/TransX = 0. m
d:Ge/BeamLine/TransY = 0. m
d:Ge/BeamLine/TransZ = 0. m
d:Ge/Beamline/RotX = 0. deg
d:Ge/BeamLine/RotY = 0. deg
d:Ge/BeamLine/RotZ = 0. deg

#SCATTERING FOIL
s:Ge/ScatteringFoil/Parent = "BeamLine"
s:Ge/ScatteringFoil/Type = "TsBox"
s:Ge/ScatteringFoil/Material = "Lead"
d:Ge/ScatteringFoil/HLX = 100. mm
d:Ge/ScatteringFoil/HLY = 100. mm
d:Ge/ScatteringFoil/HLZ = 0.39 mm # small 0.39, large 1.7 mm
d:Ge/ScatteringFoil/TransX = 0. cm
d:Ge/ScatteringFoil/TransY = 0. cm
d:Ge/ScatteringFoil/TransZ = -1.0 cm # small -1cm, large -6 cm




#########COLLIMATOR
sv:Ma/Tungsten/Components = 1 "Tungsten"
uv:Ma/Tungsten/Fractions = 1 1
d:Ma/Tungsten/Density = 19.3 g/cm3
#s:Ma/Tungsten/DefaultColor = "green"

s:Ge/Collimator_p/Parent = "BeamLine"
s:Ge/Collimator_p/Type = "TsBox"
s:Ge/Collimator_p/Material = "vacuum"
d:Ge/Collimator_p/HLX = ${LENGTH} mm
d:Ge/Collimator_p/HLY = 40. mm
d:Ge/Collimator_p/HLZ = 30.5 mm
d:Ge/Collimator_p/TransX = 0. cm
d:Ge/Collimator_p/TransY = 0. cm
d:Ge/Collimator_p/TransZ = -194. cm
s:Ge/Collimator_p/Color = "white"
s:Ge/Collimator_p/DrawingStyle = "wireframe"

s:Ge/Collimator/Type = "TsPixelatedBox"
s:Ge/Collimator/Parent   = "Collimator_p"
s:Ge/Collimator/Material = "Tungsten"
s:Ge/Collimator/Pixel/Material = "vacuum"
s:Ge/Collimator/Pixel/Color    = "yellow"
d:Ge/Collimator/PixelSizeZ     = 20 mm # Pixel thickness
d:Ge/Collimator/PixelSizeX     = .4 mm
d:Ge/Collimator/PixelSizeY     = 17 mm
d:Ge/Collimator/PitchX         = ${DENS} mm
d:Ge/Collimator/PitchY         = 7 cm
i:Ge/Collimator/NumberOfPixelsX= ${NSLITS}
i:Ge/Collimator/NumberOfPixelsY= 1
d:Ge/Collimator/TransX = 0. cm
d:Ge/Collimator/TransY = 0. cm
d:Ge/Collimator/TransZ = 0 cm
s:Ge/Collimator/Color = "Green"
s:Ge/Collimator/DrawingStyle        = "FullWireFrame"



##########MASK

s:Ge/Mask/Parent = "BeamLine"
s:Ge/Mask/Type = "TsPixelatedBox"
s:Ge/Mask/Material = "Tungsten"
s:Ge/Mask/Pixel/Material = "Vacuum"
d:Ge/Mask/PixelSizeZ = 20 mm
d:Ge/Mask/PixelSizeX = ${MWIDTH} mm
d:Ge/Mask/PixelSizeY = 18 mm
d:Ge/Mask/PitchX = 15 cm
d:Ge/Mask/PitchY = 15 cm
i:Ge/Mask/NumberOfPixelsX = 1
i:Ge/Mask/NumberOfPixelsY = 1
d:Ge/Mask/TransX = 0. cm
d:Ge/Mask/TransY = 0. cm
d:Ge/Mask/TransZ = -193 cm


################PHYSICS

sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" 
d:Ph/Default/ForRegion/RegionPhantom/CutForElectron = 0.01 mm

#BEAM
s:So/TwissSource/Type = "Emittance"
s:So/TwissSource/Component = "BeamPosition"
d:Ge/BeamPosition/TransZ = 0 cm
d:So/TwissSource/BeamEnergy = 70 MeV
s:So/TwissSource/BeamParticle = "proton"
s:So/TwissSource/Distribution = "BiGaussian" # distribution name
d:So/TwissSource/SigmaX = 0.68144 cm # std of x positions
u:So/TwissSource/SigmaXprime = 0.0079840 # std of x’, note that it’s unitless. 1 equals to 1.0 rad.
u:So/TwissSource/CorrelationX = -0.80593 # correlation of x and x’
d:So/TwissSource/SigmaY = 0.68951 cm # std of y positions
u:So/TwissSource/SigmaYPrime = 0.0078588 # std of y’
u:So/TwissSource/CorrelationY = -0.92424 # correlation of y and y’
i:So/TwissSource/NumberOfHistoriesInRun = 10000000


#PHANTOM
#PHANTOM (eventually contained into a Water Phantom box)
s:Ge/WaterBox/Parent = "BeamLine"
s:Ge/WaterBox/Type = "TsBox"
s:Ge/WaterBox/Material = "G4_WATER"
d:Ge/WaterBox/HLX = 10. cm
d:Ge/WaterBox/HLY = 10. cm
d:Ge/WaterBox/HLZ = 10. cm
d:Ge/WaterBox/TransX = 0. cm
d:Ge/WaterBox/TransY = 0. cm
d:Ge/WaterBox/TransZ = -210. cm 
s:Ge/WaterBox/Color = "blue"
s:Ge/WaterBox/DrawingStyle        = "WireFrame"

s:Ge/Phantom/Parent = "WaterBox"
s:Ge/Phantom/Type = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX = 1. mm
d:Ge/Phantom/HLY = 1. mm
d:Ge/Phantom/HLZ = 10. cm
d:Ge/Phantom/TransX = 0. cm
d:Ge/Phantom/TransY = 0. cm
d:Ge/Phantom/TransZ = 0. cm
i:Ge/Phantom/XBins = 1
i:Ge/Phantom/YBins = 1
i:Ge/Phantom/ZBins = 200
s:Ge/Phantom/AssignToRegionNamed = "RegionPhantom"
s:Ge/Phantom/Color = "green"
s:Ge/Phantom/DrawingStyle        = "WireFrame"

s:Ge/Phantom_1/Parent = "WaterBox"
s:Ge/Phantom_1/Type = "TsBox"
s:Ge/Phantom_1/Material = "G4_WATER"
d:Ge/Phantom_1/HLX = 10 mm
d:Ge/Phantom_1/HLY = 10 mm
d:Ge/Phantom_1/HLZ = 2.5 cm
d:Ge/Phantom_1/TransX = 0. cm
d:Ge/Phantom_1/TransY = 0. cm
d:Ge/Phantom_1/TransZ = 7.5 cm
s:Ge/Phantom_1/Color = "white"



############### SCORERS


s:Sc/DoseAtPhantom_z/Quantity                  = "DoseToWater"
s:Sc/DoseAtPhantom_z/Component                 = "WaterBox"
b:Sc/DoseAtPhantom_z/OutputToConsole           = "FALSE"
s:Sc/DoseAtPhantom_z/OutputFile           = "results/dose_${SEED}_2"
s:Sc/DoseAtPhantom_z/OutputType           = "csv"
s:Sc/DoseAtPhantom_z/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DoseAtPhantom_z/ZBins = 1
i:Sc/DoseAtPhantom_z/XBins = 250
i:Sc/DoseAtPhantom_z/YBins = 250


#s:Sc/DoseAtPhantom_depth/Quantity                 = "DoseToWater"
#s:Sc/DoseAtPhantom_depth/Component                = "WaterBox"
#b:Sc/DoseAtPhantom_depth/OutputToConsole          = "FALSE"
#s:Sc/DoseAtPhantom_depth/OutputFile           = "results2/dose_depth_${SEED}"
#s:Sc/DoseAtPhantom_depth/OutputType           = "csv"
#s:Sc/DoseAtPhantom_depth/IfOutputFileAlreadyExists = "Overwrite"
#i:Sc/DoseAtPhantom_depth/ZBins = 12
#i:Sc/DoseAtPhantom_depth/XBins = 250
#i:Sc/DoseAtPhantom_depth/YBins = 250

# s:Sc/DoseAtPhantom_depth_xz/Quantity                 = "DoseToWater"
# s:Sc/DoseAtPhantom_depth_xz/Component                = "WaterBox"
# b:Sc/DoseAtPhantom_depth_xz/OutputToConsole          = "FALSE"
# s:Sc/DoseAtPhantom_depth_xz/OutputFile           = "results/dose_xz_${SEED}_2"
# s:Sc/DoseAtPhantom_depth_xz/OutputType           = "csv"
# s:Sc/DoseAtPhantom_depth_xz/IfOutputFileAlreadyExists = "Overwrite"
# i:Sc/DoseAtPhantom_depth_xz/ZBins = 500 
# i:Sc/DoseAtPhantom_depth_xz/XBins = 300
# i:Sc/DoseAtPhantom_depth_xz/YBins = 1

s:Sc/DoseAtPhantom_cut/Quantity                 = "DoseToWater"
s:Sc/DoseAtPhantom_cut/Component                = "Phantom_1"
b:Sc/DoseAtPhantom_cut/OutputToConsole          = "FALSE"
s:Sc/DoseAtPhantom_cut/OutputFile           = "results/dose_cut_xz_${SEED}_2"
s:Sc/DoseAtPhantom_cut/OutputType           = "csv"
s:Sc/DoseAtPhantom_cut/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DoseAtPhantom_cut/ZBins = 2000
i:Sc/DoseAtPhantom_cut/XBins = 350
i:Sc/DoseAtPhantom_cut/YBins = 1


#### PARTCLES LOST DUE TO THE COLLIMATOR

#s:Sc/flux_in/Quantity = "SurfaceTrackCount"
#s:Sc/flux_in/Surface = "Collimator_p/ZPlusSurface"
#b:Sc/flux_in/OutputToConsole = "False"
#s:Sc/flux_in/OutputFile = "results/flux_in_${SEED}"
#s:Sc/flux_in/OutputType = "csv"
#s:Sc/flux_in/IfOutputFileAlreadyExists = "Overwrite"

#s:Sc/flux_out/Quantity = "SurfaceTrackCount"
#s:Sc/flux_out/Surface = "Collimator_p/ZMinusSurface"
#b:Sc/flux_out/OutputToConsole = "FALSE"
#s:Sc/flux_out/OutputFile = "results/flux_out_${SEED}"
#s:Sc/flux_out/OutputType = "csv"
#s:Sc/flux_out/IfOutputFileAlreadyExists = "Overwrite"

#s:Sc/phase_space/Quantity = "PhaseSpace"
#s:Sc/phase_space/Surface = "Collimator_p/ZPlusSurface"
#b:Sc/phase_space/OutputToConsole = "FALSE"
#s:Sc/phase_space/OutputFile = "results/ps_plus_${SEED}"
#s:Sc/phase_space/OutputType = "ASCII"
#s:Sc/phase_space/IfOutputFileAlreadyExists = "Overwrite"

#s:Sc/phase_space_2/Quantity = "PhaseSpace"
#s:Sc/phase_space_2/Surface = "Collimator_p/ZMinusSurface"
#b:Sc/phase_space_2/OutputToConsole = "FALSE"
#s:Sc/phase_space_2/OutputFile = "results/ps_minus_${SEED}"
#s:Sc/phase_space_2/OutputType = "ASCII"
#s:Sc/phase_space_2/IfOutputFileAlreadyExists = "Overwrite"



b:Ts/PauseBeforeQuit = "False"


